; T2, Spin Echo
;
; By Jae-Seung Lee
; 10/9/2017


#include <Avance.incl>


"p2=p1*2"
"d11=30m"


1 ze
2 d1
  p1 ph1
  vd*0.5
  p2 ph2
  vd*0.5
  go=2 ph31
  d11 wr #0 if #0 ivd
  lo to 1 times td1
exit


ph1=0 0 1 1 2 2 3 3
ph2=1 3 2 0 3 1 0 2
ph31=0 0 1 1 2 2 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;vd : variable delay, taken from vd-list
;NS: 2 * n
;td1: number of experiments = number of delays in vd-list
;FnMODE: undefined

